PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'port': '5000', 'ip': '192.168.0.247'}
  Full-screen window = True
  Monitor = expRoom
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = study_english_2_part
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Routines
  Routine Video
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    MovieComponent vid
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $"./Resources/Stimuli/" +vidName
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine delay_500
    TextComponent textEmpty
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine valenceSlider
    SliderComponent sliderValence
      borderColor = LightGray
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ButtonComponent buttonNext_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    TextComponent text_19
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the marker to rate your level of Valence (Very Negative - Very Positive)
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    ImageComponent ValenceManikin
      image = Resources/ValenceManikin.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine arousalSlider
    SliderComponent sliderArousal
      borderColor = LightGray
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ButtonComponent buttonNext_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    TextComponent text_20
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the marker to rate your level of Arousal (Very Calm - Very Excited)
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    ImageComponent Arousal
      image = Resources/ArousalManikin.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine delay_1s
    TextComponent textEmpty_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine GoodBye
    TextComponent text_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this study!


        Please let the experimenter know that you are done.
    KeyboardComponent key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent end_exp
      Code Type = Py
      End Experiment:
        import time
        from psychopy import logging

        logging.exp('end_exp_logging: ' + str(time.time()))
  Routine welcome_videos
    TextComponent OasisWelcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Once more, you will be shown 8 short videos.
        After each video, you will again be presented with 2 sliders. Use the sliders to indicate how each video made you feel. Don't think too much about it, just rate how you felt when watching it.



        Please click on ‘Next’ to continue.
    ButtonComponent buttonNext_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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  Routine WelcomeWindow
    TextComponent Welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome back!

        Please make sure that you are wearing a different EEG-device than before and refrain from touching it. As a reminder: Please avoid talking and making any strong body movements during the experiment and keep your head as still as possible.

        When you are ready, click on ‘Next’ to start.
    CodeComponent logging_start
      Code Type = Py
      Begin Experiment:
        import time
        from psychopy import logging

        logging.exp('start_welcome_logging: ' + str(time.time()))
        vidNum = 1
    ButtonComponent buttonNext_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    CodeComponent osc
      Code Type = Py
      Begin Experiment:
        import sys

        sys.path.append("C:/Users/Franziska Schumann/PycharmProjects/emotionclassifier/venv/Lib/site-packages")
        from pythonosc.udp_client import SimpleUDPClient

        ip = expInfo['ip']
        port = expInfo['port'] #Muse: 5000, Crown: 9000

        client = SimpleUDPClient(ip, int(port))  # Create client
  Routine PreVideo
    TextComponent Welcome_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are about to watch a video for the next 3 minutes. You should now hear a test sound. If not, please do not continue yet and let the experimenter know that the sound is turned off.




        Please click on ‘Next’ to continue
    ImageComponent image
      image = Resources\Speaker_Icon.svg.png
      pos = (0, -0.13)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    SoundComponent test_sound
      saveStartStop = False
      sound = A
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    ButtonComponent buttonNext_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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  Routine RelaxationVideo_3
    MovieComponent RelaxationVideo
      backend = moviepy
      forceEndRoutine = True
      movie = Resources\relax.mp4
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent relax_start
      Code Type = Py
      Begin Routine:
        import time
        from psychopy import logging

        logging.exp('start_relax_logging: ' + str(time.time()))
    CodeComponent relax_end
      Code Type = Py
      End Routine:
        import time
        from psychopy import logging

        logging.exp('end_relax_logging: ' + str(time.time()))
  Routine WelcomePANAS
    TextComponent textWelcome
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On the following slides, please indicate the extent to which you experience the stated feelings right now. 
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    ButtonComponent buttonNext_7
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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  Routine PANAS_1_5
    TextComponent textInterested
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Interested
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    SliderComponent sliderInterested
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Very slightly or not at all', 'A little', 'Moderately', 'Quite a bit', 'Extremely'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textDistressed
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Distressed
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    SliderComponent sliderDistressed
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textExcited
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Excited
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    SliderComponent sliderExcited
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textUpset
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Upset
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    SliderComponent sliderUpset
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textStrong
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Strong
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    SliderComponent sliderStrong
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_1_5
      bold = True
      borderColor = black
      borderWidth = 0.05
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.15, 0.07)
      startVal [time (s)] = 0
      text = Next >
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  Routine PANAS_6_10
    TextComponent textGuilty
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Guilty
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    SliderComponent sliderGuilty
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Very slightly or not at all', 'A little', 'Moderately', 'Quite a bit', 'Extremely'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textScared
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Scared
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    SliderComponent sliderScared
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textHostile
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hostile
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    SliderComponent sliderHostile
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textEnthusiastic
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Enthusiastic
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    SliderComponent sliderEnthusiastic
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textProud
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Proud
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    SliderComponent sliderProud
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_6_10
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.15, 0.07)
      startVal [time (s)] = 0
      text = Next >
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  Routine PANAS_11_15
    TextComponent textIrritable
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Irritable
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    SliderComponent sliderIrritable
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Very slightly or not at all', 'A little', 'Moderately', 'Quite a bit', 'Extremely'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textAlert
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Alert
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    SliderComponent sliderAlert
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textAshamed
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ashamed
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    SliderComponent sliderAshamed
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textInspired
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Inspired
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    SliderComponent sliderInspired
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textNervous
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nervous
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    SliderComponent sliderNervous
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_11_15
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.15, 0.07)
      startVal [time (s)] = 0
      text = Next >
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  Routine PANAS_16_20
    TextComponent textDetermined
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Determined
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    SliderComponent sliderDetermined
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Very slightly or not at all', 'A little', 'Moderately', 'Quite a bit', 'Extremely'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textAttentive
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Attentive
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    SliderComponent sliderAttentive
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textJittery
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Jittery
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    SliderComponent sliderJittery
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textActive
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Active
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    SliderComponent sliderActive
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textAfraid
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Afraid
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    SliderComponent sliderAfraid
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.00, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_16_20
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.15, 0.07)
      startVal [time (s)] = 0
      text = Next >
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  Routine Familiarity
    TextComponent familiarity1
      letterHeight = 0.05
      pos = (0.5, -0.09)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Know the video
        very well
    TextComponent familiarity0
      letterHeight = 0.05
      pos = (-0.5, -0.09)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Never seen
        it before
    TextComponent text_familiarity
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please indicate your level of familiarity with video you’ve just watched
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    ButtonComponent buttonNext
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    SliderComponent sliderFamiliarity
      borderColor = LightGray
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine affectiveSlider
    PolygonComponent polygon
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_1
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence_0
      image = Resources/AS_unhappy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_1
      image = Resources/AS_happy.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_1
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal_0
      image = Resources/AS_sleepy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_1
      image = Resources/AS_wideawake.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent text_21
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Pleasure
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    TextComponent text_22
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Arousal
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    ButtonComponent buttonNext_9
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    ImageComponent intensity
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        from psychopy import logging

        logging.exp('affectiveSliderVersion: 1')
    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How do you feel right now?
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    CodeComponent send_rating_2
      Code Type = Py
      End Routine:
        # Send video start and end timestamps with the given rating

        client.send_message("/psychopy/arousal", [vid_start, vid_end, sliderArousal_1.getRating()])
        client.send_message("/psychopy/valence", [vid_start, vid_end, sliderValence_1.getRating()])
  Routine affectiveSlider2
    PolygonComponent polygon_3
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_2
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence
      image = Resources/AS_unhappy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_2
      image = Resources/AS_happy.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_2
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal
      image = Resources/AS_sleepy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_2
      image = Resources/AS_wideawake.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent intensity_2
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2_2
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Pleasure
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    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Arousal
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    ButtonComponent buttonNext_10
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        from psychopy import logging

        logging.exp('affectiveSliderVersion: 2')
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How do you feel right now?
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    CodeComponent send_rating
      Code Type = Py
      End Routine:
        # Send video start and end timestamps with the given rating

        client.send_message("/psychopy/arousal", [vid_start, vid_end, sliderArousal_2.getRating()])
        client.send_message("/psychopy/valence", [vid_start, vid_end, sliderValence_2.getRating()])
  Routine chooseK
    TextComponent textEmpty_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent randOrder_2
      Code Type = Py
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      Begin Routine:
        from random import randint
        from psychopy import logging

        # 1 or 0
        k = randint(0, 1)
        # the opposite of k
        n = int(not(k))

        logging.exp('k, n:' + str(k) + ', ' + str(n))
  Routine affectiveSlider_init
    PolygonComponent polygon_4
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_3
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence_3
      image = Resources/AS_unhappy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_4
      image = Resources/AS_happy.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_3
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal_3
      image = Resources/AS_sleepy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_4
      image = Resources/AS_wideawake.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Pleasure
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    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Arousal
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    ButtonComponent buttonNext_11
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    ImageComponent intensity_3
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2_3
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        from psychopy import logging

        logging.exp('affectiveSliderVersion: 1')
      End Routine:
        logging.flush()
    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How do you feel right now?
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  Routine affectiveSlider2_init
    PolygonComponent polygon_5
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_4
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence_5
      image = Resources/AS_unhappy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_6
      image = Resources/AS_happy.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_4
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal_5
      image = Resources/AS_sleepy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_6
      image = Resources/AS_wideawake.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent intensity_4
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2_4
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_27
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Pleasure
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    TextComponent text_28
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Move the slider to rate your level of Arousal
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    ButtonComponent buttonNext_12
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        from psychopy import logging

        logging.exp('Init_affectiveSliderVersion: 2')
      End Routine:
        logging.flush()
    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How do you feel right now?
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  Routine ThankYou_close_eyes
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the next step, please close your eyes for half a minute and relax. You will hear a sound when the time is over.
        Please do not open your eyes again until you hear the sound.

        Click on ‘Next’ when you have your eyes closed and are ready to start.
    ButtonComponent buttonNext_8
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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  Routine post_video_baseline
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 30
      stopVal [duration (s)] = 1.0
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    TextComponent text_17
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Close your eyes until you hear a sound.
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    CodeComponent start_baseline
      Code Type = Py
      Begin Routine:
        import time
        from psychopy import logging

        logging.exp('start_baseline_logging: ' + str(time.time()))
    CodeComponent end_baseline
      Code Type = Auto->JS
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      End Routine:
        import time
        from psychopy import logging

        logging.exp('end_baseline_logging: ' + str(time.time()))
  Routine VideoNumber
    TextComponent vNum
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"Video: " + str(vidNum)
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    CodeComponent code_5
      Code Type = Py
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      End Routine:
        vidNum += 1

        vid_start = str(time.time())
        vid_id = str(ID)
        logging.exp('start_vid' + vid_id + '_logging: ' + vid_start)
    CodeComponent get_affects_2
      Code Type = Py
      End Routine:
        if affect[0] == "H":
            gt_valence = "high"
            val_pic = "Resources/AS_happy.png"
        else:
            gt_valence = "low"
            val_pic = "Resources/AS_unhappy.png"

        if affect[2] == "H":
            gt_arousal = "high"
            ar_pic = "Resources/AS_wideawake"
        else:
            gt_arousal = "low"
            ar_pic = "Resources/AS_sleepy"
  Routine GroundTruthRating
    PolygonComponent polygon_6
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent MostPeople
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How most people rated this video:
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    ButtonComponent buttonNext_13
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    TextComponent arousal_gt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Arousal: " + gt_arousal
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    TextComponent valence_gt
      letterHeight = 0.05
      pos = (0, -0.09)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Valence: " + gt_valence
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    ImageComponent image_arousal
      image [set every repeat] = $ar_pic
      pos = (0, 0.12)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_valence
      image [set every repeat] = $val_pic
      pos = (0, -0.22)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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  Routine workaround_log_video_end
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        vid_end = str(time.time())
        vid_id = str(ID)
        logging.exp('end_vid' + vid_id + '_logging: ' + vid_end)
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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Flow
  Routine WelcomeWindow
  Routine delay_500
  Routine PreVideo
  Routine delay_500
  Routine RelaxationVideo_3
  Routine ThankYou_close_eyes
  Routine post_video_baseline
  Routine chooseK
  LoopInitiator skipOrNotInit loopType="TrialHandler"
    loopType = random
    nReps = k
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    Routine affectiveSlider_init
  LoopTerminator skipOrNotInit
  LoopInitiator skipOrNotIit2 loopType="TrialHandler"
    loopType = random
    nReps = n
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    Routine affectiveSlider2_init
  LoopTerminator skipOrNotIit2
  Routine delay_500
  Routine welcome_videos
  Routine delay_500
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Resources/loopVideos_part2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ID': 4, 'vidName': '4.avi', 'affect': 'HVHA', 'source_dataset': 'DECAF', 'source_movie': 'Airplane'},
      {'ID': 80, 'vidName': '80.avi', 'affect': 'HVHA', 'source_dataset': 'MAHNOB-HCI', 'source_movie': 'Love Actually'},
      {'ID': 13, 'vidName': '13.avi', 'affect': 'HVLA', 'source_dataset': 'DECAF', 'source_movie': 'Love Actually'},
      {'ID': 10, 'vidName': '10.avi', 'affect': 'HVLA', 'source_dataset': 'DECAF', 'source_movie': 'August Rush'},
      {'ID': 30, 'vidName': '30.avi', 'affect': 'LVHA', 'source_dataset': 'MAHNOB-HCI', 'source_movie': 'Silent Hill'},
      {'ID': 34, 'vidName': '34.avi', 'affect': 'LVHA', 'source_dataset': 'DECAF', 'source_movie': 'Pink Flamingos'},
      {'ID': 19, 'vidName': '19.wmv', 'affect': 'LVLA', 'source_dataset': 'DECAF', 'source_movie': 'The Exorcist'},
      {'ID': 23, 'vidName': '23.wmv', 'affect': 'LVLA', 'source_dataset': 'DECAF', 'source_movie': 'My Bodyguard'}]
    Routine VideoNumber
    Routine Video
    Routine workaround_log_video_end
    Routine chooseK
    LoopInitiator skipOrNot loopType="TrialHandler"
      loopType = random
      nReps = k
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      Routine affectiveSlider
    LoopTerminator skipOrNot
    LoopInitiator skipOrNot2 loopType="TrialHandler"
      loopType = random
      nReps = n
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      Routine affectiveSlider2
    LoopTerminator skipOrNot2
    Routine delay_500
    Routine Familiarity
    Routine delay_500
    Routine GroundTruthRating
    Routine delay_1s
  LoopTerminator trials
  Routine WelcomePANAS
  Routine delay_500
  Routine PANAS_1_5
  Routine delay_500
  Routine PANAS_6_10
  Routine delay_500
  Routine PANAS_11_15
  Routine delay_500
  Routine PANAS_16_20
  Routine delay_500
  Routine GoodBye
