PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'port': '5000', 'ip': '192.168.0.247'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Panas_german
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Routines
  Routine delay_500
    TextComponent textEmpty
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine PANAS_1_5_g
    TextComponent textInteressiert
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Interessiert
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    SliderComponent sliderInterested
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Gar nicht', 'Ein bisschen', 'Einigermaßen', 'Erheblich', 'Äußerst'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textBekümmert
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Bekümmert
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    SliderComponent sliderDistressed
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textFreudigErregt
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Freudig Erregt
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    SliderComponent sliderExcited
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textVerärgert
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Verärgert
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    SliderComponent sliderUpset
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textStark
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Stark
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    SliderComponent sliderStrong
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_1_5
      bold = True
      borderColor = black
      borderWidth = 0.05
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine PANAS_6_10_g
    TextComponent textSchuldig
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Schuldig
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    SliderComponent sliderGuilty
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Gar nicht', 'Ein bisschen', 'Einigermaßen', 'Erheblich', 'Äußerst'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textErschrocken
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Erschrocken
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    SliderComponent sliderScared
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textFeindselig
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Feindselig
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    SliderComponent sliderHostile
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textBegeistert
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Begeistert
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    SliderComponent sliderEnthusiastic
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textStolz
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Stolz
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    SliderComponent sliderProud
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_6_10
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine PANAS_11_15_g
    TextComponent textGereizt
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Gereizt
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    SliderComponent sliderIrritable
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Gar nicht', 'Ein bisschen', 'Einigermaßen', 'Erheblich', 'Äußerst'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textWach
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wach
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    SliderComponent sliderAlert
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textBeschämt
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Beschämt
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    SliderComponent sliderAshamed
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textAngeregt
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Angeregt
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    SliderComponent sliderInspired
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textNervös
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nervös
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    SliderComponent sliderNervous
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_11_15
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine PANAS_16_20_g
    TextComponent textEntschlossen
      letterHeight = 0.03
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Entschlossen
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    SliderComponent sliderDetermined
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = 'Gar nicht', 'Ein bisschen', 'Einigermaßen', 'Erheblich', 'Äußerst'
      letterHeight = 0.03
      pos = (0.2, 0.3)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textAufmerksam
      letterHeight = 0.03
      pos = (-0.6, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Aufmerksam
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    SliderComponent sliderAttentive
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textDurcheinander
      letterHeight = 0.03
      pos = (-0.6, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Durcheinander
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    SliderComponent sliderJittery
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, 0.0)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textAktiv
      letterHeight = 0.03
      pos = (-0.6, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Aktiv
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    SliderComponent sliderActive
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0.2, -0.15)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textÄngstlich
      letterHeight = 0.03
      pos = (-0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ängstlich
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    SliderComponent sliderAfraid
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.2, -0.3)
      saveStartStop = False
      size = (1.00, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_16_20
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine WillkommenPANAS
    TextComponent textWilkommen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nun möchten wir gerne von Ihnen wissen, wie Sie sich fühlen. Die folgenden Wörter beschreiben unterschiedliche Gefühle und Empfindungen. Lesen Sie jedes Wort und tragen Sie dann in die Skala neben jedem Wort die Intensität ein. Sie haben die Möglichkeit, zwischen fünf Abstufungen zu wählen. Geben Sie bitte an, wie Sie sich im Moment fühlen.
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    ButtonComponent buttonNext_10
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine RelxationVideo
    MovieComponent RelaxationVideo
      backend = moviepy
      forceEndRoutine = True
      movie = Resources\relax.mp4
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent relax_start
      Code Type = Py
      Begin Routine:
        import time
        from psychopy import logging

        logging.exp('start_relax_logging: ' + str(time.time()))
    CodeComponent relax_end
      Code Type = Py
      End Routine:
        import time
        from psychopy import logging

        logging.exp('end_relax_logging: ' + str(time.time()))
  Routine PreVideo
    TextComponent Welcome_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sie werden für die nächsten 3 Minuten ein Video sehen. Sie sollten jetzt einen Test-Sound hören. Wenn nicht, geben Sie bitte der Experiment-Leitung Bescheid.




        Wenn Sie fertig sind, klicken Sie auf ‘Weiter’.
    ImageComponent image
      image = Resources\Speaker_Icon.svg.png
      pos = (0, -0.03)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    SoundComponent test_sound
      saveStartStop = False
      sound = A
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    ButtonComponent buttonNext_9
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine WelcomeWindow
    TextComponent Willkommen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Willkommen zu dieser Studie!

        Sie sollten ein EEG-Messgerät tragen; bitte fassen Sie es nicht an.
        Bitte vermeiden Sie es während der Studie zu sprechen. Bewegen Sie sich so wenig wie möglich und halten Sie Ihren Kopf möglichst still.

        Wenn Sie bereit sind, klicken Sie ‘Weiter’, um zu beginnen.
    CodeComponent logging_start
      Code Type = Py
      Begin Experiment:
        import time
        from psychopy import logging

        logging.exp('start_welcome_logging: ' + str(time.time()))
        vidNum = 1
    ButtonComponent buttonNext_8
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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    CodeComponent osc
      Code Type = Py
      Begin Experiment:
        import sys

        sys.path.append("C:/Users/Franziska Schumann/PycharmProjects/emotionclassifier/venv/Lib/site-packages")
        from pythonosc.udp_client import SimpleUDPClient

        ip = expInfo['ip']
        port = expInfo['port'] #Muse: 5000, Crown: 9000

        client = SimpleUDPClient(ip, int(port))  # Create client
  Routine ThankYou_close_eyes
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für Ihre Antworten!

        Bitte schließen Sie im nächsten Schritt Ihre Augen und entspannen Sie sich für eine halbe Minute. Wenn die Zeit vorbei ist, erklingt ein Ton.
        Bitte öffnen Sie Ihre Augen erst wieder nach dem Ton.

        Klicken Sie auf ‘Weiter’, nachdem Sie Ihre Augen geschlossen haben und bereit sind, die Zeit zu starten.
    ButtonComponent buttonNext_11
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine post_video_baseline
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 30
      stopVal [duration (s)] = 1.0
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    TextComponent text_17
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Halten Sie Ihre Augen geschlossen, bis der Ton erklingt.
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    CodeComponent start_baseline
      Code Type = Py
      Begin Routine:
        import time
        from psychopy import logging

        logging.exp('start_baseline_logging: ' + str(time.time()))
    CodeComponent end_baseline
      Code Type = Py
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      End Routine:
        import time
        from psychopy import logging

        logging.exp('end_baseline_logging: ' + str(time.time()))
  Routine trial_instructions
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sie werden nun Videos sehen. Nach jedem Video möchten wir von Ihnen wissen, wie Sie sich fühlen.




        Drücken Sie die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_videos
    TextComponent VideoWelcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Es werden Ihnen 8 kurze Videos gezeigt.
        Nach jedem Video werden Ihnen wieder 2 Schieberegler. Benutzen Sie die Schieberegler, um anzugeben, wie Sie sich bei jedem Video gefühlt haben. Denken Sie nicht zu viel darüber nach, sondern bewerten Sie einfach, wie Sie sich gefühlt haben, als Sie das Video gesehen haben.



        Klicken Sie auf ‘Weiter’, um zu beginnen.
    ButtonComponent buttonNext_12
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine valenceSlider
    SliderComponent sliderValence
      borderColor = LightGray
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ButtonComponent buttonNext_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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    TextComponent text_19
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Geben Sie das Level an Valenz/Wertigkeit an, das Sie empfinden
        (Sehr Negativ - Sehr Positiv)
    ImageComponent ValenceManikin
      image = Resources/ValenceManikin.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent text_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Das war der erste Teil der Studie!

        Bitte geben Sie der Experiment-Leiterin jetzt Bescheid, dass Sie mit diesem Teil fertig sind.
    CodeComponent end_exp
      Code Type = Py
      End Experiment:
        import time
        from psychopy import logging

        logging.exp('end_exp_logging: ' + str(time.time()))
    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine aSlider
    SliderComponent ArousalSlider
      borderColor = LightGray
      fillColor = Black
      forceEndRoutine = True
      granularity = 0.25
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 0.25, 0.5, 0.74, 1)
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    ImageComponent arousalManikin
      image = ../NeededFiles/ArousalManikin.png
      pos = (0, -0.1)
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent buttonNext
      bold = True
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0, -0.4)
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
      timeRelativeTo = routine
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an Arousal an (Ruhig - Erregt)
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine arousalSlider
    SliderComponent sliderArousal
      borderColor = LightGray
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ButtonComponent buttonNext_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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    TextComponent text_20
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Geben Sie Ihr Level an emotionaler Erregung/Aktivierung an
        (Sehr Ruhig - Sehr Erregt)
    ImageComponent ArousalManikin
      image = Resources/ArousalManikin.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine delay_1s
    TextComponent textEmpty_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Video
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    MovieComponent vid
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $"./Resources/Stimuli/" +vidName
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine Familiarity
    TextComponent familiarity1
      letterHeight = 0.05
      pos = (0.5, -0.09)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ich kenne das
        Video sehr gut
    TextComponent familiarity0
      letterHeight = 0.05
      pos = (-0.5, -0.09)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Noch nie
        gesehen
    TextComponent text_familiarity
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie an, wie gut Ihnen das gesehene Video bekannt ist
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    SliderComponent sliderFamiliarity
      borderColor = LightGray
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonNext_7
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine chooseK
    TextComponent textEmpty_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent randOrder_2
      Code Type = Py
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      Begin Routine:
        from random import randint
        from psychopy import logging

        # 1 or 0
        k = randint(0, 1)
        # the opposite of k
        n = int(not(k))

        logging.exp('k, n:' + str(k) + ', ' + str(n))
  Routine affectiveSlider
    PolygonComponent polygon
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_1
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence_0
      image = Resources/AS_unhappy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_1
      image = Resources/AS_happy.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_1
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal_0
      image = Resources/AS_sleepy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_1
      image = Resources/AS_wideawake.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent text_21
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an Valenz an
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    TextComponent text_22
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an emotionaler Erregung/Aktivierung  an
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    ImageComponent intensity
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        from psychopy import logging

        logging.exp('affectiveSliderVersion: 1')
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie fühlen sie sich jetzt gerade?
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    ButtonComponent buttonNext_16
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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    CodeComponent send_rating_2
      Code Type = Py
      End Routine:
        # Send video start and end timestamps with the given rating

        client.send_message("/psychopy/arousal", [vid_start, vid_end, sliderArousal_1.getRating()])
        client.send_message("/psychopy/valence", [vid_start, vid_end, sliderValence_1.getRating()])
  Routine affectiveSlider2
    PolygonComponent polygon_3
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_2
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence
      image = Resources/AS_unhappy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_2
      image = Resources/AS_happy.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_2
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal
      image = Resources/AS_sleepy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_2
      image = Resources/AS_wideawake.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent intensity_2
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2_2
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an Valenz an
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    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an emotionaler Erregung/Aktivierung an
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        from psychopy import logging

        logging.exp('affectiveSliderVersion: 2')
    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie fühlen sie sich jetzt gerade?
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    ButtonComponent buttonNext_14
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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    CodeComponent send_rating
      Code Type = Py
      End Routine:
        # Send video start and end timestamps with the given rating

        client.send_message("/psychopy/arousal", [vid_start, vid_end, sliderArousal_2.getRating()])
        client.send_message("/psychopy/valence", [vid_start, vid_end, sliderValence_2.getRating()])
  Routine affectiveSlider_init
    PolygonComponent polygon_4
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_3
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence_3
      image = Resources/AS_unhappy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_4
      image = Resources/AS_happy.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_3
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal_3
      image = Resources/AS_sleepy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_4
      image = Resources/AS_wideawake.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an Valenz an
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    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an emotionaler Erregung/Aktivierung an
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    ImageComponent intensity_3
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2_3
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        from psychopy import logging

        logging.exp('affectiveSliderVersion: 1')
      End Routine:
        logging.flush()
    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie fühlen sie sich jetzt gerade?
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    ButtonComponent buttonNext_13
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine affectiveSlider2_init
    PolygonComponent polygon_5
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent sliderValence_4
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageValence_5
      image = Resources/AS_unhappy.png
      pos = (-0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageValence_6
      image = Resources/AS_happy.png
      pos = (0.6, -0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    SliderComponent sliderArousal_4
      borderColor = white
      color = white
      fillColor = grey
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 0.5, 1)
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    ImageComponent imageArousal_5
      image = Resources/AS_sleepy.png
      pos = (-0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent imageArousal_6
      image = Resources/AS_wideawake.png
      pos = (0.6, 0.2)
      saveStartStop = False
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent intensity_4
      image = Resources/AS_intensity_cue.png
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent intensity2_4
      image = Resources/AS_intensity_cue.png
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.0, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_27
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an Valenz an
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    TextComponent text_28
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Geben Sie Ihr Level an emotionaler Erregung/Aktivierung an
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        from psychopy import logging

        logging.exp('Init_affectiveSliderVersion: 2')
      End Routine:
        logging.flush()
    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie fühlen sie sich jetzt gerade?
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    ButtonComponent buttonNext_15
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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  Routine vidNumber
    CodeComponent code_5
      Code Type = Py
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      End Routine:
        vidNum += 1

        vid_start = str(time.time())
        vid_id = str(ID)
        logging.exp('start_vid' + vid_id + '_logging: ' + vid_start)
    TextComponent vNumber
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $'Video: ' + str(vidNum)
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    CodeComponent get_affects_2
      Code Type = Py
      End Routine:
        if affect[0] == "H":
            gt_valence = "hoch"
            val_pic = "Resources/AS_happy.png"
        else:
            gt_valence = "niedrig"
            val_pic = "Resources/AS_unhappy.png"

        if affect[2] == "H":
            gt_arousal = "hoch"
            ar_pic = "Resources/AS_wideawake"
        else:
            gt_arousal = "niedrig"
            ar_pic = "Resources/AS_sleepy"
  Routine routine_1
  Routine welcomePANAS2
    ButtonComponent buttonNext_17
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.21, 0.07)
      startVal [time (s)] = 0
      text = Weiter >
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    TextComponent textWilkommen_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nun möchten wir noch einmal von Ihnen wissen, wie Sie sich fühlen.  Geben Sie bitte an, wie Sie sich im Moment fühlen.
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  Routine GroundTruthRating
    PolygonComponent polygon_6
      fillColor = LightGray
      lineColor = LightGray
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent MostPeople
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Die meisten Menschen haben das Video so bewertet:
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    ButtonComponent buttonNext_18
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Next >
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    TextComponent arousal_gt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Erregung/Aktivierung: " + gt_arousal
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    TextComponent valence_gt
      letterHeight = 0.05
      pos = (0, -0.09)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Valenz: " + gt_valence
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    ImageComponent image_arousal
      image [set every repeat] = $ar_pic
      pos = (0, 0.12)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_valence
      image [set every repeat] = $val_pic
      pos = (0, -0.22)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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  Routine workaround_log_video_end
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        vid_end = str(time.time())
        vid_id = str(ID)
        logging.exp('end_vid' + vid_id + '_logging: ' + vid_end)
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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Flow
  Routine WelcomeWindow
  Routine delay_500
  Routine PreVideo
  Routine delay_500
  Routine RelxationVideo
  Routine WillkommenPANAS
  Routine delay_500
  Routine PANAS_1_5_g
  Routine delay_500
  Routine PANAS_6_10_g
  Routine delay_500
  Routine PANAS_11_15_g
  Routine delay_500
  Routine PANAS_16_20_g
  Routine delay_500
  Routine ThankYou_close_eyes
  Routine post_video_baseline
  Routine chooseK
  LoopInitiator skipOrNotInit loopType="TrialHandler"
    loopType = random
    nReps = k
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    Routine affectiveSlider_init
  LoopTerminator skipOrNotInit
  LoopInitiator skipOrNotInit2 loopType="TrialHandler"
    loopType = random
    nReps = n
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    Routine affectiveSlider2_init
  LoopTerminator skipOrNotInit2
  Routine delay_500
  Routine welcome_videos
  Routine delay_500
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Resources/loopVideos_part1.xlsx
    loopType = random
    nReps = 1
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    Routine vidNumber
    Routine Video
    Routine workaround_log_video_end
    Routine chooseK
    LoopInitiator skipOrNot loopType="TrialHandler"
      loopType = random
      nReps = k
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      Routine affectiveSlider
    LoopTerminator skipOrNot
    LoopInitiator skipOrNot2 loopType="TrialHandler"
      loopType = random
      nReps = n
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      Routine affectiveSlider2
    LoopTerminator skipOrNot2
    Routine delay_500
    Routine Familiarity
    Routine delay_500
    Routine GroundTruthRating
    Routine delay_1s
  LoopTerminator trials
  Routine ThankYou
